PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = jul30online
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Routines
  Routine CDT_Instr
    TextComponent instr_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.
        In this experiment you will be remembering colors.

        Each trial will start with a fixation cross.
        Do your best to keep your eyes on it.
        Then, 4 or 8 squares with different colors will appear.
        Remember as many colors as you can.
        After a short delay, one square will reappear.
        If it has the SAME color and location, press the "K" key.
        If the color or location is DIFFERENT, press the "L" key.
        If you are not sure, just take your best guess.

        It will take less than 10 minutes.

        Press 'S' to start the EXPERIMENT.
    KeyboardComponent space_to_start
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine CDT_Instr_train
    TextComponent instr_text_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.
        In this experiment you will be remembering colors.

        Each trial will start with a fixation cross.
        Do your best to keep your eyes on it.
        Then, 4 or 8 squares with different colors will appear.
        Remember as many colors as you can.
        After a short delay, one square will reappear.
        If it has the SAME color and location, press the "K" key.
        If the color or location is DIFFERENT, press the "L" key.
        If you are not sure, just take your best guess.

        Press 'S' to start TRAINING.
    KeyboardComponent space_to_start_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine CDT_Trial
    PolygonComponent stim1
      fillColor [set every repeat] = $stim1col
      lineColor [set every repeat] = $stim1col
      opacity [set every repeat] = stim1opa
      pos [set every repeat] = [stim1posx,stim1posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim2
      fillColor [set every repeat] = $stim2col
      lineColor [set every repeat] = $stim2col
      opacity [set every repeat] = stim2opa
      pos [set every repeat] = [stim2posx,stim2posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim3
      fillColor [set every repeat] = $stim3col
      lineColor [set every repeat] = $stim3col
      opacity [set every repeat] = stim3opa
      pos [set every repeat] = [stim3posx,stim3posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim4
      fillColor [set every repeat] = $stim4col
      lineColor [set every repeat] = $stim4col
      opacity [set every repeat] = stim4opa
      pos [set every repeat] = [stim4posx,stim4posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim5
      fillColor [set every repeat] = $stim5col
      lineColor [set every repeat] = $stim5col
      opacity [set every repeat] = stim5opa
      pos [set every repeat] = [stim5posx,stim5posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim6
      fillColor [set every repeat] = $stim6col
      lineColor [set every repeat] = $stim6col
      opacity [set every repeat] = stim6opa
      pos [set every repeat] = [stim6posx,stim6posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim7
      fillColor [set every repeat] = $stim7col
      lineColor [set every repeat] = $stim7col
      opacity [set every repeat] = stim7opa
      pos [set every repeat] = [stim7posx,stim7posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim8
      fillColor [set every repeat] = $stim8col
      lineColor [set every repeat] = $stim8col
      opacity [set every repeat] = stim8opa
      pos [set every repeat] = [stim7posx,stim7posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent target
      fillColor [set every repeat] = $targetcol
      lineColor [set every repeat] = $targetcol
      pos [set every repeat] = [targetposx,targetposy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 2.05
      units = height
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    TextComponent trialcount
      disabled = True
      letterHeight = 0.03
      pos = (0.45, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.05
      text [set every repeat] = $trialnum
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    TextComponent fix
      color = black
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = +
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'k','l'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.05
      store = first key
      storeCorrect = True
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  Routine CDT_Trial_train
    PolygonComponent stim1_2
      fillColor [set every repeat] = $stim1col
      lineColor [set every repeat] = $stim1col
      opacity [set every repeat] = stim1opa
      pos [set every repeat] = [stim1posx,stim1posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim2_2
      fillColor [set every repeat] = $stim2col
      lineColor [set every repeat] = $stim2col
      opacity [set every repeat] = stim2opa
      pos [set every repeat] = [stim2posx,stim2posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim3_2
      fillColor [set every repeat] = $stim3col
      lineColor [set every repeat] = $stim3col
      opacity [set every repeat] = stim3opa
      pos [set every repeat] = [stim3posx,stim3posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim4_2
      fillColor [set every repeat] = $stim4col
      lineColor [set every repeat] = $stim4col
      opacity [set every repeat] = stim4opa
      pos [set every repeat] = [stim4posx,stim4posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim5_2
      fillColor [set every repeat] = $stim5col
      lineColor [set every repeat] = $stim5col
      opacity [set every repeat] = stim5opa
      pos [set every repeat] = [stim5posx,stim5posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim6_2
      fillColor [set every repeat] = $stim6col
      lineColor [set every repeat] = $stim6col
      opacity [set every repeat] = stim6opa
      pos [set every repeat] = [stim6posx,stim6posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim7_2
      fillColor [set every repeat] = $stim7col
      lineColor [set every repeat] = $stim7col
      opacity [set every repeat] = stim7opa
      pos [set every repeat] = [stim7posx,stim7posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim8_2
      fillColor [set every repeat] = $stim8col
      lineColor [set every repeat] = $stim8col
      opacity [set every repeat] = stim8opa
      pos [set every repeat] = [stim7posx,stim7posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent target_2
      fillColor [set every repeat] = $targetcol
      lineColor [set every repeat] = $targetcol
      pos [set every repeat] = [targetposx,targetposy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 2.05
      units = height
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    TextComponent trialcount_2
      disabled = True
      letterHeight = 0.03
      pos = (0.45, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.05
      text [set every repeat] = $trialnum
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    TextComponent fix_2
      color = black
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = +
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'k','l'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.05
      store = first key
      storeCorrect = True
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  Routine GNG_Instr
    TextComponent Instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for completing the first task,

        The second part will be shorter (aprox. 3 minutes).

        Press 'Space' for blue, nothing for orange.

        Good Luck!!

        'S' to start.
    KeyboardComponent InstrResp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GNG_fix
    TextComponent fix_ini
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine GNG_trial
    TextComponent fix_trial
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    PolygonComponent trialBlue
      fillColor = $[-1.000,-1.000,1.000]
      lineColor = $[-1.000,-1.000,1.000]
      nVertices = 180
      opacity [set every repeat] = blueOpacity
      shape = regular polygon...
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    PolygonComponent trialOrange
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      nVertices = 180
      opacity [set every repeat] = orangeOpacity
      shape = regular polygon...
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    KeyboardComponent trialResp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = first key
      storeCorrect = True
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  Routine GNG_Instr_2
    TextComponent Instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Rest and press 'S' to start. Remember , 'space' for blue, nothing for orange
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    KeyboardComponent InstrResp_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GNG_end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for your time!!!

        Press ‘q’ to exit.
    KeyboardComponent endResp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine CDT_Instr_train
  LoopInitiator CDT_trials_train loopType="TrialHandler"
    conditionsFile = html/resources/conditionsfileTrain_luria.xlsx
    loopType = sequential
    nReps = 1
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    Routine CDT_Trial_train
  LoopTerminator CDT_trials_train
  Routine CDT_Instr
  LoopInitiator CDT_trials loopType="TrialHandler"
    conditionsFile = html/resources/conditionsfileJK_luria.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [OrderedDict([('trialnum', 1), ('condit', 'same'), ('stimamt', 4), ('stim1posx', 0.479063596406051), ('stim1posy', 0.540824677919481), ('stim1col', 'blue'), ('stim1opa', 1), ('stim2posx', 0.317379632619009), ('stim2posy', -0.540824677919481), ('stim2col', 'magenta'), ('stim2opa', 1), ('stim3posx', -0.317379632619009), ('stim3posy', -0.275514458562755), ('stim3col', 'yellow'), ('stim3opa', 1), ('stim4posx', -0.317379632619009), ('stim4posy', 0.275514458562755), ('stim4col', 'black'), ('stim4opa', 1), ('stim5posx', 0.479063596406051), ('stim5posy', 0.816339136482236), ('stim5col', 'red'), ('stim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,
      OrderedDict([('trialnum', 2), ('condit', 'same'), ('stimamt', 4), ('stim1posx', 0.317379632619009), ('stim1posy', 0.816339136482236), ('stim1col', 'orange'), ('stim1opa', 1), ('stim2posx', 0.479063596406051), ('stim2posy', -0.540824677919481), ('stim2col', 'green'), ('stim2opa', 1), ('stim3posx', -0.161683963787042), ('stim3posy', -0.816339136482236), ('stim3col', 'black'), ('stim3opa', 1), ('stim4posx', -0.479063596406051), ('stim4posy', 0.540824677919481), ('stim4col', 'magenta'), ('stim4opa', 1), ('stim5posx', 0.317379632619009), ('stim5posy', 0.540824677919481), ('stim5col', 'blue'), ('sti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,
      OrderedDict([('trialnum', 3), ('condit', 'same'), ('stimamt', 4), ('stim1posx', 0.161683963787042), ('stim1posy', 0.540824677919481), ('stim1col', 'orange'), ('stim1opa', 1), ('stim2posx', 0.479063596406051), ('stim2posy', -0.540824677919481), ('stim2col', 'red'), ('stim2opa', 1), ('stim3posx', -0.161683963787042), ('stim3posy', -0.275514458562755), ('stim3col', 'white'), ('stim3opa', 1), ('stim4posx', -0.479063596406051), ('stim4posy', 0.816339136482236), ('stim4col', 'black'), ('stim4opa', 1), ('stim5posx', 0.479063596406051), ('stim5posy', 0.816339136482236), ('stim5col', 'magenta'), ('stim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,
      OrderedDict([('trialnum', 4), ('condit', 'same'), ('stimamt', 4), ('stim1posx', 0.317379632619009), ('stim1posy', 0.540824677919481), ('stim1col', 'blue'), ('stim1opa', 1), ('stim2posx', 0.161683963787042), ('stim2posy', -0.540824677919481), ('stim2col', 'black'), ('stim2opa', 1), ('stim3posx', -0.479063596406051), ('stim3posy', -0.816339136482236), ('stim3col', 'red'), ('stim3opa', 1), ('stim4posx', -0.161683963787042), ('stim4posy', 0.816339136482236), ('stim4col', 'green'), ('stim4opa', 1), ('stim5posx', 0.317379632619009), ('stim5posy', 0.816339136482236), ('stim5col', 'white'), ('stim5opa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
    Routine CDT_Trial
  LoopTerminator CDT_trials
  Routine GNG_Instr
  Routine GNG_fix
  LoopInitiator GNG_trials_1 loopType="TrialHandler"
    conditionsFile = html/resources/GNGCondJK20.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')])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
    Routine GNG_trial
  LoopTerminator GNG_trials_1
  Routine GNG_Instr_2
  Routine GNG_fix
  LoopInitiator GNG_trials_2 loopType="TrialHandler"
    conditionsFile = html/resources/GNGCondJK20.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')])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
    Routine GNG_trial
  LoopTerminator GNG_trials_2
  Routine GNG_Instr_2
  Routine GNG_fix
  LoopInitiator GNG_trials_3 loopType="TrialHandler"
    conditionsFile = html/resources/GNGCondJK20.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine GNG_trial
  LoopTerminator GNG_trials_3
