PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '00000', 'age': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = $[1,1,1]
  expName = CDT_GNG_IUS12
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Routines
  Routine CDT_Instr
    TextComponent instr_text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Training completed!

        Welcome to the first experiment.
        In this experiment you will be remembering colors.

        Each trial will start with a fixation cross.
        Do your best to keep your eyes on it.

        Then, 4 or 6 squares with different colors will appear.
        Remember as many colors as you can.
        After a short delay, one square will reappear.
        If it has the SAME color and location, press the "K" key.
        If the color or location is DIFFERENT, press the "L" key.
        If you are not sure, just take your best guess.

        It should take less than 10 minutes.

        Press 'S' to start the EXPERIMENT.
    KeyboardComponent space_to_start
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine CDT_Instr_train
    TextComponent instr_text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.
        In this experiment you will be remembering colors.

        Each trial will start with a black fixation cross.
        PLEASE try to keep your eyes on it (it will help you).
        Then, 4 or 6 squares with different colors will appear.
        Remember as many colors as you can.
        After a short delay, one square will reappear.

        If it has the SAME color and location, press the "K" key.
        If the color or location is DIFFERENT, press the "L" key.
        If you are not sure, just take your best guess.

        Press 'S' to start TRAINING.
    KeyboardComponent space_to_start_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine CDT_Trial
    PolygonComponent stim1
      fillColor [set every repeat] = $stim1col
      lineColor [set every repeat] = $stim1col
      opacity [set every repeat] = stim1opa
      pos [set every repeat] = [stim1posx,stim1posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim2
      fillColor [set every repeat] = $stim2col
      lineColor [set every repeat] = $stim2col
      opacity [set every repeat] = stim2opa
      pos [set every repeat] = [stim2posx,stim2posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim3
      fillColor [set every repeat] = $stim3col
      lineColor [set every repeat] = $stim3col
      opacity [set every repeat] = stim3opa
      pos [set every repeat] = [stim3posx,stim3posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim4
      fillColor [set every repeat] = $stim4col
      lineColor [set every repeat] = $stim4col
      opacity [set every repeat] = stim4opa
      pos [set every repeat] = [stim4posx,stim4posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim5
      fillColor [set every repeat] = $stim5col
      lineColor [set every repeat] = $stim5col
      opacity [set every repeat] = stim5opa
      pos [set every repeat] = [stim5posx,stim5posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim6
      fillColor [set every repeat] = $stim6col
      lineColor [set every repeat] = $stim6col
      opacity [set every repeat] = stim6opa
      pos [set every repeat] = [stim6posx,stim6posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent target
      fillColor [set every repeat] = $targetcol
      lineColor [set every repeat] = $targetcol
      pos [set every repeat] = [targetposx,targetposy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 2.05
      units = height
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    TextComponent trialcount
      disabled = True
      letterHeight = 0.03
      pos = (0.45, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.05
      text [set every repeat] = $trialnum
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    TextComponent fix
      color = black
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = +
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'k','l'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.05
      store = first key
      storeCorrect = True
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  Routine CDT_Trial_train
    PolygonComponent stim1_2
      fillColor [set every repeat] = $stim1col
      lineColor [set every repeat] = $stim1col
      opacity [set every repeat] = stim1opa
      pos [set every repeat] = [stim1posx,stim1posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim2_2
      fillColor [set every repeat] = $stim2col
      lineColor [set every repeat] = $stim2col
      opacity [set every repeat] = stim2opa
      pos [set every repeat] = [stim2posx,stim2posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim3_2
      fillColor [set every repeat] = $stim3col
      lineColor [set every repeat] = $stim3col
      opacity [set every repeat] = stim3opa
      pos [set every repeat] = [stim3posx,stim3posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim4_2
      fillColor [set every repeat] = $stim4col
      lineColor [set every repeat] = $stim4col
      opacity [set every repeat] = stim4opa
      pos [set every repeat] = [stim4posx,stim4posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim5_2
      fillColor [set every repeat] = $stim5col
      lineColor [set every repeat] = $stim5col
      opacity [set every repeat] = stim5opa
      pos [set every repeat] = [stim5posx,stim5posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent stim6_2
      fillColor [set every repeat] = $stim6col
      lineColor [set every repeat] = $stim6col
      opacity [set every repeat] = stim6opa
      pos [set every repeat] = [stim6posx,stim6posy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 1
      stopVal [duration (s)] = $stimdur
      units = height
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    PolygonComponent target_2
      fillColor [set every repeat] = $targetcol
      lineColor [set every repeat] = $targetcol
      pos [set every repeat] = [targetposx,targetposy]
      saveStartStop = False
      shape = rectangle
      size [set every repeat] = [stimsizex,stimsizey]
      startVal [time (s)] = 2.05
      units = height
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    TextComponent trialcount_2
      disabled = True
      letterHeight = 0.03
      pos = (0.45, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.05
      text [set every repeat] = $trialnum
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    TextComponent fix_2
      color = black
      letterHeight = 0.02
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = +
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'k','l'
      correctAns = $corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2.05
      store = first key
      storeCorrect = True
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  Routine GNG_Instr
    TextComponent Instructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Remember, press 'Space' for blue, nothing for orange.

        Now, it is going to be faster and without feedback...

        Good Luck!!


        'S' to start.
    KeyboardComponent InstrResp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GNG_fix
    TextComponent fix_ini
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine GNG_trial
    TextComponent fix_trial
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.60
      text = +
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    PolygonComponent trialBlue
      fillColor = $[-1.000,-1.000,1.000]
      lineColor = $[-1.000,-1.000,1.000]
      nVertices = 180
      opacity [set every repeat] = blueOpacity
      shape = regular polygon...
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    PolygonComponent trialOrange
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      nVertices = 180
      opacity [set every repeat] = orangeOpacity
      shape = regular polygon...
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.15
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    KeyboardComponent trialResp
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.60
      store = first key
      storeCorrect = True
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  Routine GNG_Instr_2
    TextComponent Instructions_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Rest and press 'S' to start. Remember , 'space' for blue, nothing for orange
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    KeyboardComponent InstrResp_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine GNG_end
    TextComponent thanks
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is the end of the experiment.

        Thank you for your time!!!

        Press ‘q’ to exit.
    KeyboardComponent endResp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine consent1
    ImageComponent consent_1
      image = Slide1.png
      size = [1, 0.8533]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.49)
      startVal [time (s)] = 0.0
      units = height
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      text:
        After reading, press Space to continue
  Routine consent1_2
    ImageComponent consent
      image = Slide2.png
      size = [1, 0.8533]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_4
      color = black
      letterHeight = 0.03
      pos = (0, -0.49)
      startVal [time (s)] = 0.0
      units = height
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      text:
        After reading, press Space to continue
  Routine consent1_3
    ImageComponent consent_2
      image = Slide3.png
      size = [1, 0.8533]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_6
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_5
      color = black
      letterHeight = 0.03
      pos = (0, -0.49)
      startVal [time (s)] = 0.0
      units = height
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      text:
        I consent (Y) I do not consent (Esc)
  Routine trial_slider
    CodeComponent code_perfoskip_2
      Code Type = Both
      Begin JS Routine:
        PerfoE = 0;
      Begin Routine:
        PerfoE = 0
      Each Frame:
        PerfoE = trials.data['slider_2.response'].mean()

        if PerfoE < 5:
            continueRoutine = False
      Each JS Frame:
        // Get JS array of trial objects (i.e., a list of python dicts with response data)
        dat = psychoJS.experiment._trialsData

        // Filter data to get correct trials
        corr = dat.filter((trial) => trial['engprof_trials.ran'] === 1)

        // Get responses only as an array
        rts = corr.map((trial) => trial['slider_2.response'])

        // Reduce performance to a single number : the mean
        PerfoE = rts.reduce((a, b) => a + b) / rts.length

        if (PerfoE < 5) {
            continueRoutine = false;
            }
    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $qenglish
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    SliderComponent slider_inactive
      disabled = True
      forceEndRoutine = False
      granularity = 0
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5)
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = ('Not at all \n characteristic of me', 'A little characteristic of me', 'Somewhat characteristic of me', 'Very characteristic of me', 'Entirely characteristic of me')
      pos = (0, -0.15)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = ['rating', 'radio', 'labels45', 'whiteOnBlack']
      ticks = (1, 2, 3, 4, 5)
      units = height
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    CodeComponent code_slider
      Code Type = Both
      Begin JS Routine:
        sliderClick = 0;
      Begin Routine:
        sliderClick=0
      Each Frame:
        if showSlider==None:
            continueRoutine=False
        elif slider.getRating() != None and sliderClick==0:
            sliderClick=t
        elif sliderClick == 0:
            pass
        elif t > sliderClick+1:
            continueRoutine=False
      Each JS Frame:
        if ((showSlider === undefined)) {
            continueRoutine = false;
        } else {
            if (((slider.getRating() !== undefined) && (sliderClick === 0))) {
                sliderClick = t;
            } else {
                if ((sliderClick === 0)) {
                } else {
                    if ((t > (sliderClick + 1))) {
                        continueRoutine = false;
                    }
                }
            }
        }
    CodeComponent code_slider_JS
      Code Type = JS
      Begin JS Routine:
        slider.size[1] = slider.size[1] / 2;
        slider._applyStyle();
        markerSize = util.to_px(slider.size, 'height', psychoJS.window)[1];
        slider.labels=['Not at all\n characteristic\n of me','A little\n characteristic\n of me','Somewhat\ncharacteristic\n of me','Very\n characteristic\n of me','Entirely\n characteristic\nof me'];
        slider.labelHeight=.01;
        col = new util.Color('white')
      Each JS Frame:
        try {
            if (slider._markerColor.int !== col.int) {
                slider._markerColor = col;
                slider._marker.lineStyle(1, col.int, 1, 0.5);
                slider._marker.beginFill(col.int, 1);
                slider._marker.moveTo(0, 0);
                slider._marker.lineTo(markerSize, -markerSize);
                slider._marker.lineTo(-markerSize, -markerSize);
                slider._marker.endFill();
                slider._needUpdate = true;
                slider._updateIfNeeded();

             }
        } catch (err) {}
  Routine IUS12_Instr
    CodeComponent code_perfoskip
      Code Type = Both
      Begin JS Routine:
        PerfoE = 0;
      Begin Routine:
        PerfoE = 0
      Each Frame:
        PerfoE = trials.data['slider_2.response'].mean()

        if PerfoE < 5:
            continueRoutine = False
      Each JS Frame:
        // Get JS array of trial objects (i.e., a list of python dicts with response data)
        dat = psychoJS.experiment._trialsData

        // Filter data to get correct trials
        corr = dat.filter((trial) => trial['engprof_trials.ran'] === 1)

        // Get responses only as an array
        rts = corr.map((trial) => trial['slider_2.response'])

        // Reduce RTs to a single number : the mean
        PerfoE = rts.reduce((a, b) => a + b) / rts.length


        // Get all correct
        //nCorr = 0;
        //var eachResp;
        //for (eachResp=0; eachResp<psychoJS.experiment._trialsData.length; eachResp++)
        //{
        //  nCorr += psychoJS.experiment._trialsData[eachResp]['slider_2.response'];
        //}
        //PerfoE = 100 * nCorr / psychoJS.experiment._trialsData.length;

        msgE = "English Prof:" + PerfoE + ".";


        if (PerfoE < 5) {
            continueRoutine = false;
            }
    TextComponent text
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The following questions are about how you view uncertainties.
        There are no right or wrong answers, just click on the statement that describes you.

        Please read each statement and rate on a scale of 1 ('not at all characteristic of me') to 5 ('entirely characteristic of me') in relation to how much each describes your way of being.


        Press 's' to start
    KeyboardComponent InstrResp_3
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine gender_q
    TextComponent gender_question
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        In order to allow us to describe our sample, we would now like you to answer.

        What is your gender?

        Woman (W)
        Man(M)
        Non-binary (N)
        Different identity (D)
        Prefer not to say (P)
    KeyboardComponent Gender
      allowedKeys = 'w','m','n','d','p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine age_q
    TextComponent age_question
      letterHeight = 0.1
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        How old are you (in years)?
        Type two digits then enter or 0 for prefer not to say.
    CodeComponent age_code
      Code Type = Auto->JS
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      Begin Experiment:
        displayText=''
        oldDisplayText=''
        showAge=1
      Begin Routine:
        cursorCounter=0
        cursorVariable='|'
        captured_string=''
        subject_response_finished=False
        event.clearEvents()
      Each Frame:
        if cursorCounter >= 30:
            if cursorVariable=='|':
                cursorVariable=' '
            else:
                cursorVariable='|'
            cursorCounter=0
        cursorCounter+=1

        if subject_response_finished or showAge==undefined:
            final_response=captured_string
            continueRoutine=False

        keys = event.getKeys()
        if len(keys):
            if 'escape' in keys:
                core.quit()
            elif 'backspace' in keys:
                captured_string = captured_string[:-1]
            elif 'delete' in keys:
                captured_string = captured_string[:-1]
            elif 'return' in keys and (captured_string=='0' or len(captured_string) ==2):
                subject_response_finished=True
            elif len(captured_string) == 2:
                pass
            elif '0' in keys:
                captured_string = captured_string+'0'
            elif '1' in keys:
                captured_string = captured_string+'1'
            elif '2' in keys:
                captured_string = captured_string+'2'
            elif '3' in keys:
                captured_string = captured_string+'3'
            elif '4' in keys:
                captured_string = captured_string+'4'
            elif '5' in keys:
                captured_string = captured_string+'5'
            elif '6' in keys:
                captured_string = captured_string+'6'
            elif '7' in keys:
                captured_string = captured_string+'7'
            elif '8' in keys:
                captured_string = captured_string+'8'
            elif '9' in keys:
                captured_string = captured_string+'9'
            else:
                pass

        displayText = captured_string+cursorVariable
        if displayText != oldDisplayText:
            age_text.setText(displayText)
            oldDisplayText=displayText
      End Routine:
        age = final_response.replace("\n",",")
        thisExp.addData('Age',age)
    TextComponent age_text
      letterHeight = 0.2
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 0.5
      units = norm
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  Routine setup
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        round = function(num, n=0) {
            return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }
    CodeComponent code_random
      Code Type = JS
      Begin JS Experiment:
        !function(a,b,c,d,e,f,g,h,i){function j(a){var b,c=a.length,e=this,f=0,g=e.i=e.j=0,h=e.S=[];for(c||(a=[c++]);d>f;)h[f]=f++;for(f=0;d>f;f++)h[f]=h[g=s&g+a[f%c]+(b=h[f])],h[g]=b;(e.g=function(a){for(var b,c=0,f=e.i,g=e.j,h=e.S;a--;)b=h[f=s&f+1],c=c*d+h[s&(h[f]=h[g=s&g+b])+(h[g]=b)];return e.i=f,e.j=g,c})(d)}function k(a,b){var c,d=[],e=typeof a;if(b&&"object"==e)for(c in a)try{d.push(k(a[c],b-1))}catch(f){}return d.length?d:"string"==e?a:a+"\0"}function l(a,b){for(var c,d=a+"",e=0;e<d.length;)b[s&e]=s&(c^=19*b[s&e])+d.charCodeAt(e++);return n(b)}function m(c){try{return o?n(o.randomBytes(d)):(a.crypto.getRandomValues(c=new Uint8Array(d)),n(c))}catch(e){return[+new Date,a,(c=a.navigator)&&c.plugins,a.screen,n(b)]}}function n(a){return String.fromCharCode.apply(0,a)}var o,p=c.pow(d,e),q=c.pow(2,f),r=2*q,s=d-1,t=c["seed"+i]=function(a,f,g){var h=[];f=1==f?{entropy:!0}:f||{};var o=l(k(f.entropy?[a,n(b)]:null==a?m():a,3),h),s=new j(h);return l(n(s.S),b),(f.pass||g||function(a,b,d){return d?(c[i]=a,b):a})(function(){for(var a=s.g(e),b=p,c=0;q>a;)a=(a+c)*d,b*=d,c=s.g(1);for(;a>=r;)a/=2,b/=2,c>>>=1;return(a+c)/b},o,"global"in f?f.global:this==c)};if(l(c[i](),b),g&&g.exports){g.exports=t;try{o=require("crypto")}catch(u){}}else h&&h.amd&&h(function(){return t})}(this,[],Math,256,6,52,"object"==typeof module&&module,"function"==typeof define&&define,"random");
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        items = []
      Begin Routine:
        kb.clock.reset()  # when you want to start the timer from
        msg0="Welcome back to the study!\n Your participant ID is: "+str(expInfo['participant']) + "\n\n If you don't know your participant ID, please abort the experiment (press 'Esc' and contact the experimenters (details below). \n Ready to start? Press the Y key when ready"
    ImageComponent contact_info
      image = contact_info.png
      pos = (0, -0.2)
      size = [0.9, 0.1]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_ini
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent consent_question
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg0
      units = norm
      wrapWidth = 1.5
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  Routine random_seed
    CodeComponent code_both
      Code Type = Both
      Begin Experiment:
        import random
        seedString = core.Clock()
        random.seed(seedString)
        randomnum1=random.random()
        random.seed(seedString)
        randomnum2=random.random()

        kb = keyboard.Keyboard()
      Begin JS Experiment:
        seedString = Math.seedrandom();
        randomnum1 = Math.random();
        Math.seedrandom(seedString);
        randomnum2 = Math.random();
        kb = new core.Keyboard({psychoJS: psychoJS, clock: new util.Clock(), waitForStart: true});
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        msg="Testing reseeding random numbers.\n\nrandomnum1: "+str(randomnum1) + "\n\nrandomnum2: "+str(randomnum2)
      Each Frame:
        keys = event.getKeys(['space','quit'], waitRelease=True)
        if 'quit' in keys:
            core.quit()
        elif 'space' in keys or showSeed != 1:
            continueRoutine=False
    TextComponent instructions
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      units = norm
      wrapWidth = 1.5
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  Routine embedded_form
    TextComponent iframe_loading_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0
      text = Loading...
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    CodeComponent iframe_code_2
      Code Type = JS
      Begin JS Experiment:
        showSlider=1
        showLoop=1
        var showAge=1
        showVideo=0
        showSeed=1
      Begin JS Routine:
        continue_routine = true; // Routines can't be ended from within Begin Routine
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // showSlider = psychoJS.experiment._currentTrialData['showSlider'];
        // showLoop = psychoJS.experiment._currentTrialData['showLoop'];
        // if (showLoop === undefined){
        //     showLoop = 0;
        //    }
        // showAge = psychoJS.experiment._currentTrialData['showAge'];
        showGender = psychoJS.experiment._currentTrialData['showGender'];
        // showVideo = psychoJS.experiment._currentTrialData['showVideo'];
        // showSeed = psychoJS.experiment._currentTrialData['showSeed'];
  Routine englishq_slider
    TextComponent text_6
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $qproficiency
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 0
      pos = (0, -0.15)
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      styles = ['rating', 'radio', 'labels45', 'whiteOnBlack']
      ticks = (0,1, 2, 3, 4, 5,6,7,8,9,10)
      units = height
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    CodeComponent code_auto
      Code Type = Auto->JS
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      Begin Routine:
        if engprof_trials.thisTrial<=2 :
            continueRoutine=True
        else:
            continueRoutine=False
    CodeComponent code_slider_2
      Code Type = Both
      Begin JS Routine:
        sliderClick = 0;
      Begin Routine:
        sliderClick=0
      Each Frame:
        if showSlider==None:
            continueRoutine=False
        elif slider_2.getRating() != None and sliderClick==0:
            sliderClick=t
        elif sliderClick == 0:
            pass
        elif t > sliderClick+1:
            continueRoutine=False
      Each JS Frame:
        if ((showSlider === undefined)) {
            continueRoutine = false;
        } else {
            if (((slider_2.getRating() !== undefined) && (sliderClick === 0))) {
                sliderClick = t;
            } else {
                if ((sliderClick === 0)) {
                } else {
                    if ((t > (sliderClick + 1))) {
                        continueRoutine = false;
                    }
                }
            }
        }
    CodeComponent code_slider_JS_2
      Code Type = JS
      Begin JS Routine:
        slider_2.size[1] = slider_2.size[1] / 2;
        slider_2._applyStyle();
        markerSize = util.to_px(slider.size, 'height', psychoJS.window)[1];
        slider_2.labels=['0','1','2','3','4','5','6','7','8','9','10'];
        slider_2.labelHeight=.01;
        col = new util.Color('white')
      Each JS Frame:
        try {
            if (slider_2._markerColor.int !== col.int) {
                slider_2._markerColor = col;
                slider_2._marker.lineStyle(1, col.int, 1, 0.5);
                slider_2._marker.beginFill(col.int, 1);
                slider_2._marker.moveTo(0, 0);
                slider_2._marker.lineTo(markerSize, -markerSize);
                slider_2._marker.lineTo(-markerSize, -markerSize);
                slider_2._marker.endFill();
                slider_2._needUpdate = true;
                slider_2._updateIfNeeded();

             }
        } catch (err) {}
  Routine thanks_2
    CodeComponent code_2
      Code Type = Both
      Begin JS Routine:
        msg2 = "Thanks for participating. \n \
        To enter the draw to win an Amazon eVoucher of £20, please send an email to lpzmi@nottingham.ac.uk with subject 'draw2' and in the email cut and paste the following phrase \n\
        'I participated in the study on EFCD36'\n\n \
        Press x to finish the experiment";
      Begin Routine:
        msg2='doh!'#if this comes up we forgot to update the msg!
      Each Frame:
        msg2 = 'Thanks for participating.  \
         \n \
        Press x to finish the experiment'
      Each JS Frame:
        msg2 = "Thanks for participating. \n \
        To enter the draw to win an Amazon eVoucher of £20, please send an email to lpzmi@nottingham.ac.uk with subject 'draw2' and in the email cut and paste the following phrase \n\
        'I participated in the study on EFCD36'\n\n \
        Press x to finish the experiment";
    TextComponent text_7
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $msg2
      units = height
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    KeyboardComponent key_resp_end
      allowedKeys = 'x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine GNG_Trial_Train
    TextComponent fix_trial_Train
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    PolygonComponent trialBlue_Train
      fillColor = $[-1.000,-1.000,1.000]
      lineColor = $[-1.000,-1.000,1.000]
      nVertices = 180
      opacity [set every repeat] = blueOpacity
      shape = regular polygon...
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    PolygonComponent trialOrange_Train
      fillColor = $[1.000,0.004,-1.000]
      lineColor = $[1.000,0.004,-1.000]
      nVertices = 180
      opacity [set every repeat] = orangeOpacity
      shape = regular polygon...
      size = (0.15, 0.15)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
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    KeyboardComponent trialResp_Train
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      store = first key
      storeCorrect = True
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  Routine GNG_Feedback
    CodeComponent code_Train
      Code Type = Auto->JS
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      Begin Experiment:
        feedback_color_list = ['green','red']
        feedback_word_list = ['correct!','incorrect!']
      Begin Routine:
        if trialResp_Train.corr:
            feedback_color = feedback_color_list[0]
            feedback_word = feedback_word_list[0]
        else:
            feedback_color = feedback_color_list[1]
            feedback_word = feedback_word_list[1]
    TextComponent text_feedback
      color [set every repeat] = $feedback_color
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $feedback_word
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    TextComponent fix_3
      color = blue
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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  Routine GNG_Instr_Train
    TextComponent Instructions_3
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Thanks for completing the first task,

        The second part will be shorter (aprox. 3 minutes).

        Press 'Space' for blue, nothing for orange.

        Let's do a short training first...

        Press 'S' to start the training
    KeyboardComponent InstrResp_4
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine key_reminder
    TextComponent text_8
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Remember!

        SAME color and location, press "K".

        color or location is DIFFERENT, press "L".
  Routine take_break
    CodeComponent code_break
      Code Type = Both
      Each Frame:
        if not trials.thisN in [59]:
            break_duration = 0
            continueRoutine = False
        else:
            break_duration = 60
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if ((! _pj.in_es6(trials.thisN, [59]))) {
            break_duration = 0;
            continueRoutine = false;
        } else {
            break_duration = 60;
        }
    TextComponent text_9
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_duration
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      text:
        You are halfway through this experiment!
        Take a short break.

        Press 'S' to continue.
    KeyboardComponent key_resp_5
      allowedKeys [set every repeat] = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $break_duration
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  Routine debrief
    ImageComponent debrief_slide_1
      image = debrief_slide.png
      size = [1, 0.8533]
      startVal [time (s)] = 0.0
      units = height
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    KeyboardComponent key_resp_7
      allowedKeys = 'space','s'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_10
      color = black
      letterHeight = 0.03
      pos = (0, -0.49)
      startVal [time (s)] = 0.0
      units = height
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      text:
        After reading, press 's' to continue
Flow
  Routine setup
  Routine embedded_form
  Routine random_seed
  Routine consent1
  Routine consent1_2
  Routine consent1_3
  Routine CDT_Instr_train
  LoopInitiator CDT_trials_train loopType="TrialHandler"
    conditionsFile = conditionsTrain_luria_6_screen_pos.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialnum', 1), ('condit', 'same'), ('stimamt', 4), ('stim1posx', 0.27377923295962725), ('stim1posy', -0.05475584659192545), ('stim1col', 'black'), ('stim1opa', 1), ('stim2posx', -0.16426753977577635), ('stim2posy', -0.27377923295962725), ('stim2col', 'magenta'), ('stim2opa', 1), ('stim3posx', -0.16426753977577635), ('stim3posy', 0.16426753977577635), ('stim3col', 'orange'), ('stim3opa', 1), ('stim4posx', 0.16426753977577635), ('stim4posy', 0.05475584659192545), ('stim4col', 'yellow'), ('stim4opa', 1), ('stim5posx', 0.16426753977577635), ('stim5posy', -0.05475584659192545), ('st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,
      OrderedDict([('trialnum', 2), ('condit', 'different'), ('stimamt', 4), ('stim1posx', 0.05475584659192545), ('stim1posy', -0.05475584659192545), ('stim1col', 'orange'), ('stim1opa', 1), ('stim2posx', -0.27377923295962725), ('stim2posy', 0.27377923295962725), ('stim2col', 'magenta'), ('stim2opa', 1), ('stim3posx', 0.27377923295962725), ('stim3posy', 0.16426753977577635), ('stim3col', 'yellow'), ('stim3opa', 1), ('stim4posx', -0.27377923295962725), ('stim4posy', -0.16426753977577635), ('stim4col', 'blue'), ('stim4opa', 1), ('stim5posx', 0.27377923295962725), ('stim5posy', -0.05475584659192545), (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,
      OrderedDict([('trialnum', 3), ('condit', 'same'), ('stimamt', 6), ('stim1posx', -0.05475584659192545), ('stim1posy', 0.27377923295962725), ('stim1col', 'green'), ('stim1opa', 1), ('stim2posx', 0.27377923295962725), ('stim2posy', -0.27377923295962725), ('stim2col', 'magenta'), ('stim2opa', 1), ('stim3posx', 0.27377923295962725), ('stim3posy', 0.16426753977577635), ('stim3col', 'cyan'), ('stim3opa', 1), ('stim4posx', -0.05475584659192545), ('stim4posy', -0.05475584659192545), ('stim4col', 'black'), ('stim4opa', 1), ('stim5posx', -0.27377923295962725), ('stim5posy', 0.16426753977577635), ('stim5c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,
      OrderedDict([('trialnum', 4), ('condit', 'different'), ('stimamt', 6), ('stim1posx', 0.16426753977577635), ('stim1posy', -0.05475584659192545), ('stim1col', 'orange'), ('stim1opa', 1), ('stim2posx', -0.05475584659192545), ('stim2posy', 0.27377923295962725), ('stim2col', 'red'), ('stim2opa', 1), ('stim3posx', 0.27377923295962725), ('stim3posy', 0.27377923295962725), ('stim3col', 'green'), ('stim3opa', 1), ('stim4posx', -0.05475584659192545), ('stim4posy', -0.27377923295962725), ('stim4col', 'yellow'), ('stim4opa', 1), ('stim5posx', 0.27377923295962725), ('stim5posy', -0.05475584659192545), ('st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
    Routine key_reminder
    Routine CDT_Trial_train
  LoopTerminator CDT_trials_train
  Routine CDT_Instr
  LoopInitiator CDT_trials loopType="TrialHandler"
    conditionsFile = conditions_luria_6_screen_pos.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('trialnum', 1), ('condit', 'same'), ('stimamt', 4), ('stim1posx', -0.16426753977577635), ('stim1posy', -0.27377923295962725), ('stim1col', 'orange'), ('stim1opa', 1), ('stim2posx', 0.05475584659192545), ('stim2posy', 0.16426753977577635), ('stim2col', 'yellow'), ('stim2opa', 1), ('stim3posx', -0.16426753977577635), ('stim3posy', 0.16426753977577635), ('stim3col', 'green'), ('stim3opa', 1), ('stim4posx', 0.05475584659192545), ('stim4posy', -0.05475584659192545), ('stim4col', 'red'), ('stim4opa', 1), ('stim5posx', -0.27377923295962725), ('stim5posy', -0.16426753977577635), ('stim5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,
      OrderedDict([('trialnum', 2), ('condit', 'same'), ('stimamt', 4), ('stim1posx', 0.27377923295962725), ('stim1posy', 0.05475584659192545), ('stim1col', 'magenta'), ('stim1opa', 1), ('stim2posx', -0.27377923295962725), ('stim2posy', 0.27377923295962725), ('stim2col', 'red'), ('stim2opa', 1), ('stim3posx', -0.05475584659192545), ('stim3posy', -0.05475584659192545), ('stim3col', 'yellow'), ('stim3opa', 1), ('stim4posx', 0.27377923295962725), ('stim4posy', -0.27377923295962725), ('stim4col', 'blue'), ('stim4opa', 1), ('stim5posx', 0.05475584659192545), ('stim5posy', 0.16426753977577635), ('stim5col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,
      OrderedDict([('trialnum', 3), ('condit', 'same'), ('stimamt', 4), ('stim1posx', -0.05475584659192545), ('stim1posy', -0.05475584659192545), ('stim1col', 'yellow'), ('stim1opa', 1), ('stim2posx', -0.05475584659192545), ('stim2posy', 0.05475584659192545), ('stim2col', 'cyan'), ('stim2opa', 1), ('stim3posx', 0.16426753977577635), ('stim3posy', -0.27377923295962725), ('stim3col', 'black'), ('stim3opa', 1), ('stim4posx', 0.27377923295962725), ('stim4posy', 0.27377923295962725), ('stim4col', 'magenta'), ('stim4opa', 1), ('stim5posx', -0.05475584659192545), ('stim5posy', -0.27377923295962725), ('stim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,
      OrderedDict([('trialnum', 4), ('condit', 'same'), ('stimamt', 4), ('stim1posx', 0.16426753977577635), ('stim1posy', -0.16426753977577635), ('stim1col', 'black'), ('stim1opa', 1), ('stim2posx', -0.05475584659192545), ('stim2posy', 0.16426753977577635), ('stim2col', 'yellow'), ('stim2opa', 1), ('stim3posx', 0.16426753977577635), ('stim3posy', 0.16426753977577635), ('stim3col', 'blue'), ('stim3opa', 1), ('stim4posx', -0.16426753977577635), ('stim4posy', -0.16426753977577635), ('stim4col', 'green'), ('stim4opa', 1), ('stim5posx', 0.05475584659192545), ('stim5posy', -0.16426753977577635), ('stim5co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
    Routine take_break
    Routine CDT_Trial
  LoopTerminator CDT_trials
  Routine GNG_Instr_Train
  Routine GNG_fix
  LoopInitiator GNGtrials_train loopType="TrialHandler"
    conditionsFile = GNGCondJK20_Train.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('corrAns', None), ('orangeOpacity', 1), ('blueOpacity', 0)]),
      OrderedDict([('corrAns', None), ('orangeOpacity', 1), ('blueOpacity', 0)]),
      OrderedDict([('corrAns', None), ('orangeOpacity', 1), ('blueOpacity', 0)]),
      OrderedDict([('corrAns', None), ('orangeOpacity', 1), ('blueOpacity', 0)]),
      OrderedDict([('corrAns', 'space'), ('orangeOpacity', 0), ('blueOpacity', 1)]),
      OrderedDict([('corrAns', 'space'), ('orangeOpacity', 0), ('blueOpacity', 1)]),
      OrderedDict([('corrAns', 'space'), ('orangeOpacity', 0), ('blueOpacity', 1)]),
      OrderedDict([('corrAns', 'space'), ('orangeOpacity', 0), ('blueOpacity', 1)])]
    Routine GNG_Trial_Train
    Routine GNG_Feedback
  LoopTerminator GNGtrials_train
  Routine GNG_Instr
  Routine GNG_fix
  LoopInitiator GNG_trials_1 loopType="TrialHandler"
    conditionsFile = html/resources/GNGCondJK20.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')])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
    Routine GNG_trial
  LoopTerminator GNG_trials_1
  Routine GNG_Instr_2
  Routine GNG_fix
  LoopInitiator GNG_trials_2 loopType="TrialHandler"
    conditionsFile = html/resources/GNGCondJK20.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 0), ('orangeOpacity', 1), ('corrAns', None)]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')]),
      OrderedDict([('blueOpacity', 1), ('orangeOpacity', 0), ('corrAns', 'space')])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
    Routine GNG_trial
  LoopTerminator GNG_trials_2
  Routine GNG_Instr_2
  Routine GNG_fix
  LoopInitiator GNG_trials_3 loopType="TrialHandler"
    conditionsFile = html/resources/GNGCondJK20.xlsx
    loopType = random
    nReps = 1
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    conditions:
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    Routine GNG_trial
  LoopTerminator GNG_trials_3
  LoopInitiator engprof_trials loopType="TrialHandler"
    conditionsFile = html/resources/engprof_cond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('qnumber', 1), ('qproficiency', 'On a scale from 0 to 10, indicate your personal perception of your proficiency level for English (10 being the highest score)')]),
      OrderedDict([('qnumber', 2), ('qproficiency', "On a scale from 0 to 10, indicate how frequently you are exposed to English (10 being 'always', 0 being 'never')")])]
    Routine englishq_slider
  LoopTerminator engprof_trials
  Routine IUS12_Instr
  LoopInitiator IUS12_trials loopType="TrialHandler"
    conditionsFile = html/resources/IUS12_cond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('qnumber', 1), ('qenglish', 'Unforeseen events upset me greatly.')]),
      OrderedDict([('qnumber', 2), ('qenglish', 'It frustrates me not having all the information I need.')]),
      OrderedDict([('qnumber', 3), ('qenglish', 'One should always look ahead so as to avoid surprises.')]),
      OrderedDict([('qnumber', 4), ('qenglish', 'A small, unforeseen event can spoil everything, even with the best of planning. ')]),
      OrderedDict([('qnumber', 5), ('qenglish', 'I always want to know what the future has in store for me.')]),
      OrderedDict([('qnumber', 6), ('qenglish', 'I can’t stand being taken by surprise.')])]
    Routine trial_slider
  LoopTerminator IUS12_trials
  Routine debrief
  Routine thanks_2
